OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Data collection patch
  we offer to collect GDF-file with each data class independently
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)
Comment
  python script to normalize value [-1,1]
Comment
  feature aggregation
Comment
  try to use CSV-file writer instead of GDF

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #4
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> alpha => #6
  Frequencies to select = 7:13
#5.Amplitude -> beta => #7
  Frequencies to select = 13:25
#5.Amplitude -> gamma => #8
  Frequencies to select = 25:60
#5.Amplitude -> delta => #9
  Frequencies to select = 4:7
#5.Amplitude -> theta => #10
  Frequencies to select = 0:4
alpha=#6, beta=#7, gamma=#8, delta=#9, theta=#10 -> Simple DSP "relative alpha power"
  Equation = alpha/(alpha+beta+gamma+delta+theta)
-> Simple DSP "inverse relative alpha power"
  Equation = 1/x
-> 0xc67a01dc Simple DSP => #13
  Equation = x
#4 -> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #15
  Spectral components = Amplitude
#15.Amplitude -> alpha 1 => #16
  Frequencies to select = 7:13
#4 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #18
  Spectral components = Amplitude
#18.Amplitude -> alpha 2 => #19
  Frequencies to select = 7:13
A=#16, B=#19 -> Simple DSP "alpha1+alpha2" => #20
  Equation = A-B
A=#16, B=#19 -> Simple DSP "alpha1-alpha2" => #21
  Equation = A+B
A=#20, B=#21 -> Simple DSP "asymmetry coefficient" => #22
  Equation = A/B
Input 1=#13, Input 2=#22 -> Signal Merger
-> Feature aggregator
-> Simple DSP => #25
  Equation = x
Signal=#25 -> GDF file writer
  Filename = record-[$core{date}-$core{time}].gdf

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

0xc73e83ec CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
